 
# >>>> INPUT FILE FOR MC-GPU v1.5 VICTRE-DBT >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>
 
#[SECTION SIMULATION CONFIG v.2009-05-12]
1.02e10                         # TOTAL NUMBER OF HISTORIES, OR SIMULATION TIME IN SECONDS IF VALUE < 100000
123456789                       # RANDOM SEED (ranecu PRNG)
1                              # GPU NUMBER TO USE WHEN MPI IS NOT USED, OR TO BE AVOIDED IN MPI RUNS
512                             # GPU THREADS PER CUDA BLOCK (multiple of 32)
1000                            # SIMULATED HISTORIES PER GPU THREAD
 
#[SECTION SOURCE v.2016-12-02]
W28kVp_Rh50um_Be1mm_SiemensBoone.spec    # X-RAY ENERGY SPECTRUM FILE
 0.00001  4.90   63.0           # SOURCE POSITION: X (chest-to-nipple), Y (right-to-left), Z (caudal-to-cranial) [cm]
 0.0    1.0    0.0             # SOURCE DIRECTION COSINES: U V W
-1   -1                 # TOTAL AZIMUTHAL (WIDTH, X) AND POLAR (HEIGHT, Z) APERTURES OF THE FAN BEAM [degrees] (input negative to automatically cover the whole detector)
0  -1   0             # EULER ANGLES (RzRyRz) TO ROTATE RECTANGULAR BEAM FROM DEFAULT POSITION AT Y=0, NORMAL=(0,-1,0)
 
#[SECTION IMAGE DETECTOR v.2017-06-20]
./out/mcgpu_image                     # OUTPUT IMAGE FILE NAME
3000      1500                  # NUMBER OF PIXELS IN THE IMAGE: Nx Nz
25.50     12.75                 # IMAGE SIZE (width, height): Dx Dz [cm]
65.00                           # SOURCE-TO-DETECTOR DISTANCE (detector set in front of the source, perpendicular to the initial direction)
 0.0    0.0                     # IMAGE OFFSET ON DETECTOR PLANE IN WIDTH AND HEIGHT DIRECTIONS (BY DEFAULT BEAM CENTERED AT IMAGE CENTER) [cm]
 0.0200                         # DETECTOR THICKNESS [cm] (DEBUG!!)
 0.004027  # ==> MFP(Se,19.0keV)   # DETECTOR MATERIAL MEAN FREE PATH AT AVERAGE ENERGY [cm] (DEBUG!!)
 0.05  3.51795          # PROTECTIVE COVER THICKNESS (detector+grid) [cm], MEAN FREE PATH AT AVERAGE ENERGY [cm] (input 0 or neative to disable)
10.0   78.74   0.0017            # ANTISCATTER GRID RATIO, FREQUENCY, STRIP THICKNESS [X:1, lp/cm, cm] (enter 0 to disable the grid)
0.0157   1.2521      # ANTISCATTER STRIPS AND INTERSPACE MEAN FREE PATHS AT AVERAGE ENERGY [cm]
1                              # ORIENTATION 1D FOCUSED ANTISCATTER GRID LINES: 0==STRIPS PERPENDICULAR LATERAL DIRECTION (mammo style); 1==STRIPS PARALLEL LATERAL DIRECTION (CBBT style)
#[SECTION TOMOGRAPHIC TRAJECTORY v.2016-12-02]
1                                # NUMBER OF PROJECTIONS 
60.0                            # SOURCE-TO-ROTATION AXIS DISTANCE
10           # ANGLE BETWEEN PROJECTIONS (360/num_projections for full CT) [degrees]
0                           # ANGULAR ROTATION TO FIRST PROJECTION (USEFUL FOR DBT, INPUT SOURCE DIRECTION CONSIDERED AS 0 DEGREES) [degrees]
 0.0  0.0  1.0                  # AXIS OF ROTATION (Vx,Vy,Vz)
 0.0                            # TRANSLATION ALONG ROTATION AXIS BETWEEN PROJECTIONS (HELICAL SCAN) [cm]
 
#[SECTION VOXELIZED GEOMETRY FILE v.2017-07-26]
/mnt/no4/huangwenhui/MCGPU/water.vox    # VOXEL GEOMETRY FILE (penEasy 2008 format; .gz accepted)
 0.0    0.0    0.0              # OFFSET OF THE VOXEL GEOMETRY (DEFAULT ORIGIN AT LOWER BACK CORNER) [cm]
 -1280   -1950   -940              # NUMBER OF VOXELS: INPUT A 0 TO READ ASCII FORMAT WITH HEADER SECTION, RAW VOXELS WILL BE READ OTHERWISE
 -0.0050 -0.0050 -0.0050           # VOXEL SIZES [cm]
 -1 -1 -1                          # SIZE OF LOW RESOLUTION VOXELS THAT WILL BE DESCRIBED BY A BINARY TREE, GIVEN AS POWERS OF TWO (eg, 2 2 3 = 2^2x2^2x2^3 = 128 input voxels per low res voxel; 0 0 0 disables tree)
 
#[SECTION MATERIAL FILE LIST v.2020-03-03]   
#  -- Input material file names first, then material density after keyword 'density=' (optional if using nominal density), then comma-separated list of voxel ID numbers after keyword 'voxelID=' (empty if material not used).
/home/kanshengqi/software/MCGPULite/material/air__5-120keV.mcgpu.gz                  density=0.0012   voxelId=0         #  1st MATERIAL FILE (.gz accepted)
/home/kanshengqi/software/MCGPULite/material/water__5-120keV.mcgpu.gz              density=1    voxelId=1                #  2nd MATERIAL FILE
/home/kanshengqi/software/MCGPULite/material/adipose__5-120keV.mcgpu               density=0.920    voxelId=5,10    #  3rd MATERIAL FILE
/home/kanshengqi/software/MCGPULite/material/blood__5-120keV.mcgpu                                                                         #  4th MATERIAL FILE
 
# >>>> END INPUT FILE >>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>

